PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1536, 864]
  expName = delay_discounting_task
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 20, 'future_reward': 45, 'delay': 15},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 90, 'future_reward': 120, 'delay': 170},
      {'reward_today': 100, 'future_reward': 200, 'delay': 200},
      {'reward_today': 107, 'future_reward': 154, 'delay': 215},
      {'reward_today': 118, 'future_reward': 168, 'delay': 239},
      {'reward_today': 129, 'future_reward': 183, 'delay': 262},
      {'reward_today': 139, 'future_reward': 197, 'delay': 286},
      {'reward_today': 150, 'future_reward': 212, 'delay': 309},
      {'reward_today': 160, 'future_reward': 226, 'delay': 333},
      {'reward_today': 171, 'future_reward': 240, 'delay': 357},
      {'reward_today': 181, 'future_reward': 255, 'delay': 380},
      {'reward_today': 192, 'future_reward': 269, 'delay': 404},
      {'reward_today': 203, 'future_reward': 284, 'delay': 427},
      {'reward_today': 213, 'future_reward': 298, 'delay': 451},
      {'reward_today': 224, 'future_reward': 313, 'delay': 475},
      {'reward_today': 234, 'future_reward': 327, 'delay': 498},
      {'reward_today': 245, 'future_reward': 341, 'delay': 522},
      {'reward_today': 255, 'future_reward': 356, 'delay': 545},
      {'reward_today': 266, 'future_reward': 370, 'delay': 569}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
    Routine trial
  LoopTerminator trials
